PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [300, 500]
  expName = list_pa
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Routines
  Routine trial
    SoundComponent sound_exposure
      durationEstim = 0.8
      sound [set every repeat] = $word_stimuli
      startVal [time (s)] = $isi
      stopVal [duration (s)] = 0.8
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Flow
  LoopInitiator trial_loop loopType="TrialHandler"
    conditionsFile = stimuli.xlsx
    loopType = random
    nReps = 7
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    conditions:
      [{'word_stimuli': 'sounds/gauche.ogg', 'isi': 0.5},
      {'word_stimuli': 'sounds/droite.ogg', 'isi': 0.5},
      {'word_stimuli': 'sounds/gauche.ogg', 'isi': 0.6},
      {'word_stimuli': 'sounds/droite.ogg', 'isi': 0.6},
      {'word_stimuli': 'sounds/gauche.ogg', 'isi': 0.7},
      {'word_stimuli': 'sounds/droite.ogg', 'isi': 0.7},
      {'word_stimuli': 'sounds/gauche.ogg', 'isi': 0.8},
      {'word_stimuli': 'sounds/droite.ogg', 'isi': 0.8},
      {'word_stimuli': 'sounds/gauche.ogg', 'isi': 0.9},
      {'word_stimuli': 'sounds/droite.ogg', 'isi': 0.9}]
    Routine trial
  LoopTerminator trial_loop
